File_New
;

! Directory where the original files are located
Set_Pipeline_Parameter_To_Folder_Path
/PARAMETER_NAME=FOLDER
/PARAMETER_VALUE=
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;

!Set the Pipeline parameter according to the analyzed subject
Set_Pipeline_Parameter
/PARAMETER_NAME=subjIDX  
/PARAMETER_VALUE=WBDS01 
; 

Create_Hybrid_Model
/CALIBRATION_FILE=::FOLDER&::subjIDX&static1.c3d
! /RANGE=ALL_FRAMES
;

Apply_Model_Template
/MODEL_TEMPLATE=::FOLDER&WBDSmodel.mdh
/CALIBRATION_FILE=::FOLDER&::subjIDX&static1.c3d
;

Set_Subject_Mass
/CALIBRATION_FILE=::FOLDER&::subjIDX&static1.c3d
/WEIGHT=74.3
;

Set_Subject_Height
/CALIBRATION_FILE=::FOLDER&::subjIDX&static1.c3d
/HEIGHT=172.5
;

Open_File
/FILE_NAME=::FOLDER&::subjIDX&walkO*.c3d
;

Assign_Model_File
/CALIBRATION_FILE=::FOLDER&::subjIDX&static1.c3d
/MOTION_FILE_NAMES=::FOLDER&::subjIDX&walkO*.c3d
! /REMOVE_EXISTING_ASSIGNMENTS=FALSE
;

Set_Pipeline_Parameter_To_List_Of_Tagged_Files
/PARAMETER_NAME=FILES
/TAG_NAME=ALL_FILES
! /GET_CURRENT_SELECTED_FILES=false
/USE_SHORT_FILENAMES=TRUE
;

Assign_Tags_To_Files
/MOTION_FILE_NAMES=::FOLDER&::subjIDX&walkO*S.c3d
/TAGS=S
;

Assign_Tags_To_Files
/MOTION_FILE_NAMES=::FOLDER&::subjIDX&walkO*C.c3d
/TAGS=C
;

Assign_Tags_To_Files
/MOTION_FILE_NAMES=::FOLDER&::subjIDX&walkO*F.c3d
/TAGS=F
;

Event_Delete
/EVENT_NAME=LHS+LON+LOFF+LTO+RON+RHS+ROFF+RTO
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;

Interpolate
/SIGNAL_TYPES=TARGET
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! /SIGNAL_FOLDER=ORIGINAL
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! /RESULT_FOLDER=PROCESSED
/MAXIMUM_GAP=70
! /NUM_FIT=3
! /POLYNOMIAL_ORDER=3
;

Lowpass_Filter
/SIGNAL_TYPES=ANALOG
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/SIGNAL_FOLDER=ORIGINAL
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/RESULT_FOLDER=PROCESSED
! /FILTER_CLASS=BUTTERWORTH
/FREQUENCY_CUTOFF=10
! /NUM_REFLECTED=0
! /TOTAL_BUFFER_SIZE=0
! /NUM_BIDIRECTIONAL_PASSES=1
;

Set_Force_Platform_Threshold
/THRESHOLD=20
! /SET_AS_DEFAULT=FALSE
;

Set_Use_Processed_Analog
/USE_PROCESSED=TRUE
;

Lowpass_Filter
/SIGNAL_TYPES=TARGET
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/SIGNAL_FOLDER=PROCESSED
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/RESULT_FOLDER=PROCESSED
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/FREQUENCY_CUTOFF=10
! /NUM_REFLECTED=6
! /TOTAL_BUFFER_SIZE=6
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;

Recalc
;

Automatic_Gait_Events
! /SELECT_X=FALSE
! /SELECT_Y=FALSE
/SELECT_Z=TRUE
! /FRAME_WINDOW=8
/USE_TPR=TRUE
;

Compute_Model_Based_Data
/RESULT_NAME=R Hip Angle
/FUNCTION=JOINT_ANGLE
/SEGMENT=RTH
/REFERENCE_SEGMENT=RPV
/RESOLUTION_COORDINATE_SYSTEM=
! /USE_CARDAN_SEQUENCE=FALSE
! /NORMALIZATION=FALSE
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! /NEGATEX=FALSE
! /NEGATEY=FALSE
! /NEGATEZ=FALSE
/AXIS1=Z
/AXIS2=X
/AXIS3=Y
! /TREADMILL_DATA=FALSE
! /TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
! /TREADMILL_SPEEED=0.0
;

Compute_Model_Based_Data
/RESULT_NAME=L Hip Angle
/FUNCTION=JOINT_ANGLE
/SEGMENT=LTH
/REFERENCE_SEGMENT=RPV
/RESOLUTION_COORDINATE_SYSTEM=
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/NEGATEX=TRUE
/NEGATEY=TRUE
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/AXIS1=Z
/AXIS2=X
/AXIS3=Y
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;

Compute_Model_Based_Data
/RESULT_NAME=R Knee Angle
/FUNCTION=JOINT_ANGLE
/SEGMENT=RSK
/REFERENCE_SEGMENT=RTH
/RESOLUTION_COORDINATE_SYSTEM=
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/NEGATEZ=TRUE
/AXIS1=Z
/AXIS2=X
/AXIS3=Y
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;

Compute_Model_Based_Data
/RESULT_NAME=L Knee Angle
/FUNCTION=JOINT_ANGLE
/SEGMENT=LSK
/REFERENCE_SEGMENT=LTH
/RESOLUTION_COORDINATE_SYSTEM=
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/NEGATEX=TRUE
/NEGATEY=TRUE
/NEGATEZ=TRUE
/AXIS1=Z
/AXIS2=X
/AXIS3=Y
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;

Compute_Model_Based_Data
/RESULT_NAME=Right Ankle Angle
/FUNCTION=JOINT_ANGLE
/SEGMENT=Right Virtual Foot 2
/REFERENCE_SEGMENT=RSK
/RESOLUTION_COORDINATE_SYSTEM=
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/AXIS1=Z
/AXIS2=X
/AXIS3=Y
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;

Compute_Model_Based_Data
/RESULT_NAME=Left Ankle Angle
/FUNCTION=JOINT_ANGLE
/SEGMENT=Left Virtual Foot 2
/REFERENCE_SEGMENT=LSK
/RESOLUTION_COORDINATE_SYSTEM=
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/NEGATEX=TRUE
/NEGATEY=TRUE
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/AXIS1=Z
/AXIS2=X
/AXIS3=Y
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;

Compute_Model_Based_Data
/RESULT_NAME=Right Pelvic Angle
/FUNCTION=JOINT_ANGLE
/SEGMENT=RPV
/REFERENCE_SEGMENT=LAB
/RESOLUTION_COORDINATE_SYSTEM=
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! /NORMALIZATION_METHOD=FALSE
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/NEGATEX=TRUE
!/NEGATEY=FALSE
/NEGATEZ=TRUE
/AXIS1=Z
/AXIS2=X
/AXIS3=Y
;

Compute_Model_Based_Data
/RESULT_NAME=Left Pelvic Angle
/FUNCTION=JOINT_ANGLE
/SEGMENT=RPV
/REFERENCE_SEGMENT=LAB
/RESOLUTION_COORDINATE_SYSTEM=
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!/NEGATEX=FALSE
/NEGATEY=TRUE
/NEGATEZ=TRUE
/AXIS1=Z
/AXIS2=X
/AXIS3=Y
;

Compute_Model_Based_Data
/RESULT_NAME=Right Foot Angle
/FUNCTION=JOINT_ANGLE
/SEGMENT=Right Virtual Foot 2
! /REFERENCE_SEGMENT=LAB
/RESOLUTION_COORDINATE_SYSTEM=
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/NEGATEY=TRUE
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/AXIS1=Z
/AXIS2=X
/AXIS3=Y
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;

Compute_Model_Based_Data
/RESULT_NAME=Left Foot Angle
/FUNCTION=JOINT_ANGLE
/SEGMENT=Left Virtual Foot 2
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/RESOLUTION_COORDINATE_SYSTEM=
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/NEGATEX=TRUE
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/AXIS1=Z
/AXIS2=X
/AXIS3=Y
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;

Compute_Model_Based_Data
/RESULT_NAME=Right Hip Velocity
/FUNCTION=JOINT_VELOCITY
/SEGMENT=RTH
/REFERENCE_SEGMENT=RPV
/RESOLUTION_COORDINATE_SYSTEM=RTH
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/AXIS1=Z
/AXIS2=X
/AXIS3=Y
;

Compute_Model_Based_Data
/RESULT_NAME=Left Hip Velocity
/FUNCTION=JOINT_VELOCITY
/SEGMENT=LTH
/REFERENCE_SEGMENT=RPV
/RESOLUTION_COORDINATE_SYSTEM=LTH
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/NEGATEY=TRUE
/NEGATEZ=TRUE
/AXIS1=Z
/AXIS2=X
/AXIS3=Y
;

Compute_Model_Based_Data
/RESULT_NAME=Right Knee Velocity
/FUNCTION=JOINT_VELOCITY
/SEGMENT=RSK
/REFERENCE_SEGMENT=RTH
/RESOLUTION_COORDINATE_SYSTEM=RSK
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/AXIS1=Z
/AXIS2=X
/AXIS3=Y
;

Compute_Model_Based_Data
/RESULT_NAME=Left Knee Velocity
/FUNCTION=JOINT_VELOCITY
/SEGMENT=LSK
/REFERENCE_SEGMENT=LTH
/RESOLUTION_COORDINATE_SYSTEM=LSK
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/NEGATEY=TRUE
/NEGATEZ=TRUE
/AXIS1=Z
/AXIS2=X
/AXIS3=Y
;

Compute_Model_Based_Data
/RESULT_NAME=Right Ankle Velocity
/FUNCTION=JOINT_VELOCITY
/SEGMENT=Right Foot Kinemat
/REFERENCE_SEGMENT=RSK
/RESOLUTION_COORDINATE_SYSTEM=Right Foot Kinemat
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/AXIS1=Z
/AXIS2=X
/AXIS3=Y
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;

Compute_Model_Based_Data
/RESULT_NAME=Left Ankle Velocity
/FUNCTION=JOINT_VELOCITY
/SEGMENT=Left Foot Kinemat
/REFERENCE_SEGMENT=LSK
/RESOLUTION_COORDINATE_SYSTEM=Left Foot Kinemat
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/NEGATEY=TRUE
/NEGATEZ=TRUE
/AXIS1=Z
/AXIS2=X
/AXIS3=Y
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;

Compute_Model_Based_Data
/RESULT_NAME=RGRF
/FUNCTION=GRF_DATA
/SEGMENT=RFT
/REFERENCE_SEGMENT=
! /RESOLUTION_COORDINATE_SYSTEM=LAB
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=NORMALIZE_TO_LOCAL_METRIC
/NORMALIZATION_METRIC=MASS
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/NEGATEZ=TRUE
/AXIS1=Z
/AXIS2=X
/AXIS3=Y
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;

Compute_Model_Based_Data
/RESULT_NAME=LGRF
/FUNCTION=GRF_DATA
/SEGMENT=LFT
/REFERENCE_SEGMENT=
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=NORMALIZE_TO_LOCAL_METRIC
/NORMALIZATION_METRIC=MASS
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/AXIS1=Z
/AXIS2=X
/AXIS3=Y
;

Compute_Model_Based_Data
/RESULT_NAME=Right Hip Moment
/FUNCTION=JOINT_MOMENT
/SEGMENT=RTH
/REFERENCE_SEGMENT=RPV
/RESOLUTION_COORDINATE_SYSTEM=RPV
/USE_CARDAN_SEQUENCE=TRUE
/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/NEGATEX=TRUE
/NEGATEY=TRUE
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/AXIS1=Z
/AXIS2=X
/AXIS3=Y
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;

Compute_Model_Based_Data
/RESULT_NAME=Left Hip Moment
/FUNCTION=JOINT_MOMENT
/SEGMENT=LTH
/REFERENCE_SEGMENT=RPV
/RESOLUTION_COORDINATE_SYSTEM=RPV
/USE_CARDAN_SEQUENCE=TRUE
/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/AXIS1=Z
/AXIS2=X
/AXIS3=Y
;

Compute_Model_Based_Data
/RESULT_NAME=Right Knee Moment
/FUNCTION=JOINT_MOMENT
/SEGMENT=RSK
/REFERENCE_SEGMENT=RTH
/RESOLUTION_COORDINATE_SYSTEM=RTH
/USE_CARDAN_SEQUENCE=TRUE
/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/NEGATEX=TRUE
/NEGATEY=TRUE
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/AXIS1=Z
/AXIS2=X
/AXIS3=Y
;

Compute_Model_Based_Data
/RESULT_NAME=Left Knee Moment
/FUNCTION=JOINT_MOMENT
/SEGMENT=LSK
/REFERENCE_SEGMENT=LTH
/RESOLUTION_COORDINATE_SYSTEM=LTH
/USE_CARDAN_SEQUENCE=TRUE
/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/AXIS1=Z
/AXIS2=X
/AXIS3=Y
;

Compute_Model_Based_Data
/RESULT_NAME=Right Ankle Moment
/FUNCTION=JOINT_MOMENT
/SEGMENT=RFT
/REFERENCE_SEGMENT=RSK
/RESOLUTION_COORDINATE_SYSTEM=RSK
/USE_CARDAN_SEQUENCE=TRUE
/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/NEGATEX=TRUE
/NEGATEY=TRUE
/NEGATEZ=TRUE
/AXIS1=Z
/AXIS2=X
/AXIS3=Y
;

Compute_Model_Based_Data
/RESULT_NAME=Left Ankle Moment
/FUNCTION=JOINT_MOMENT
/SEGMENT=LFT
/REFERENCE_SEGMENT=LSK
/RESOLUTION_COORDINATE_SYSTEM=LSK
/USE_CARDAN_SEQUENCE=TRUE
/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/NEGATEZ=TRUE
/AXIS1=Z
/AXIS2=X
/AXIS3=Y
;

Compute_Model_Based_Data
/RESULT_NAME=Right Ankle Power
/FUNCTION=JOINT_POWER_SCALAR
/SEGMENT=RFT
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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! /AXIS1=X
! /AXIS2=Y
! /AXIS3=Z
;

Compute_Model_Based_Data
/RESULT_NAME=Right Knee Power
/FUNCTION=JOINT_POWER_SCALAR
/SEGMENT=RSK
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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;

Compute_Model_Based_Data
/RESULT_NAME=Right Hip Power
/FUNCTION=JOINT_POWER_SCALAR
/SEGMENT=RTH
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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;

Compute_Model_Based_Data
/RESULT_NAME=Left Ankle Power
/FUNCTION=JOINT_POWER_SCALAR
/SEGMENT=LFT
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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;

Compute_Model_Based_Data
/RESULT_NAME=Left Knee Power
/FUNCTION=JOINT_POWER_SCALAR
/SEGMENT=LSK
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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;

Compute_Model_Based_Data
/RESULT_NAME=Left Hip Power
/FUNCTION=JOINT_POWER_SCALAR
/SEGMENT=LTH
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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;

For_Each
/ITERATION_PARAMETER_NAME=COND
/ITEMS=S+C+F
;

Set_Pipeline_Parameter_To_List_Of_Tagged_Files
/PARAMETER_NAME=FILES
/TAG_NAME=::COND
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/USE_SHORT_FILENAMES=TRUE
;

For_Each
/ITERATION_PARAMETER_NAME=INDEX
/ITEMS=::FILES
;

Select_Active_File
/FILE_NAME=*&::INDEX
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;

Metric_Compute_Temporal_Distance
/GLOBAL_RESULT_METRIC_FOLDER=GLOBAL_RESULT_METRIC_FOLDER_&::INDEX
! /CALCULATE_PER_FILE=FALSE
! /CREATE_ALL_INSTANCES=FALSE
! /RIGHT_FOOT_LOCATION=KINETIC_KINEMATIC::RFT::ProxEndPos
! /LEFT_FOOT_LOCATION=KINETIC_KINEMATIC::LFT::ProxEndPos
! /HEIGHT=METRIC::PROCESSED::HEIGHT
/RHS_EVENT=RON
/LHS_EVENT=LON
/RTO_EVENT=ROFF
/LTO_EVENT=LOFF
/STRICT_EVENT_SEQUENCE_VALIDATION=TRUE
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! /EVENT_INSTANCE=0
! /COMPUTE_SPEED=TRUE
! /COMPUTE_STATURES_PER_SECOND=TRUE
! /COMPUTE_STRIDE_WIDTH=TRUE
! /COMPUTE_STRIDE_LENGTH=TRUE
! /COMPUTE_CYCLE_TIME=TRUE
! /COMPUTE_STEP_LENGTH=TRUE
! /COMPUTE_STEP_TIME=TRUE
! /COMPUTE_STANCE_TIME=TRUE
! /COMPUTE_SWING_TIME=TRUE
! /COMPUTE_STEPS_PER_MINUTE=TRUE
! /COMPUTE_STRIDES_PER_MINUTE=TRUE
! /COMPUTE_DOUBLE_LIMB_SUPPORT_TIME=TRUE
! /COMPUTE_RIGHT_INITIAL_DOUBLE_LIMB_SUPPORT_TIME=TRUE
! /COMPUTE_RIGHT_TERMINAL_DOUBLE_LIMB_SUPPORT_TIME=TRUE
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right Pelvic Angle
/FILE_NAME=::FOLDER&::INDEX&RPelvis.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=RON+RON
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! /USE_POINT_RATE=FALSE
/NORMALIZE_DATA=TRUE
! /NORMALIZE_POINTS=101
! /EXPORT_MEAN_AND_STD_DEV=FALSE
! /USE_P2D_FORMAT=FALSE
! /USE_XML_FORMAT=FALSE
! /USE_SHORT_FILENAME=FALSE
! /EXPORT_EMPTY_SIGNALS=FALSE
! /EXPORT_WITHOUT_HEADER=FALSE
! /EXPORT_NAN=FALSE
;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Left Pelvic Angle
/FILE_NAME=::FOLDER&::INDEX&LPelvis.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=LON+LON
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/NORMALIZE_DATA=TRUE
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=R Hip Angle
/FILE_NAME=::FOLDER&::INDEX&RHip.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=RON+RON
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/NORMALIZE_DATA=TRUE
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=L Hip Angle
/FILE_NAME=::FOLDER&::INDEX&LHip.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=LON+LON
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/NORMALIZE_DATA=TRUE
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=R Knee Angle
/FILE_NAME=::FOLDER&::INDEX&RKnee.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=RON+RON
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/NORMALIZE_DATA=TRUE
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=L Knee Angle
/FILE_NAME=::FOLDER&::INDEX&LKnee.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=LON+LON
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/NORMALIZE_DATA=TRUE
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right Ankle Angle
/FILE_NAME=::FOLDER&::INDEX&RAnkle.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=RON+RON
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/NORMALIZE_DATA=TRUE
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Left Ankle Angle
/FILE_NAME=::FOLDER&::INDEX&LAnkle.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=LON+LON
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/NORMALIZE_DATA=TRUE
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right Foot Angle
/FILE_NAME=::FOLDER&::INDEX&RFoot.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=RON+RON
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/NORMALIZE_DATA=TRUE
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Left Foot Angle
/FILE_NAME=::FOLDER&::INDEX&LFoot.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=LON+LON
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/NORMALIZE_DATA=TRUE
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right Hip Moment
/FILE_NAME=::FOLDER&::INDEX&RHipMoment.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=RON+RON
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/NORMALIZE_DATA=TRUE
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Left Hip Moment
/FILE_NAME=::FOLDER&::INDEX&LHipMoment.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=LON+LON
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/NORMALIZE_DATA=TRUE
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right Knee Moment
/FILE_NAME=::FOLDER&::INDEX&RKneeMoment.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=RON+RON
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/NORMALIZE_DATA=TRUE
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Left Knee Moment
/FILE_NAME=::FOLDER&::INDEX&LKneeMoment.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=LON+LON
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/NORMALIZE_DATA=TRUE
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right Ankle Moment
/FILE_NAME=::FOLDER&::INDEX&RAnkleMoment.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=RON+RON
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/NORMALIZE_DATA=TRUE
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Left Ankle Moment
/FILE_NAME=::FOLDER&::INDEX&LAnkleMoment.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=LON+LON
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/NORMALIZE_DATA=TRUE
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
/SIGNAL_FOLDER=ORIGINAL
/SIGNAL_NAMES=RGRF
/FILE_NAME=::FOLDER&::INDEX&RGRF.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=RON+RON
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/NORMALIZE_DATA=TRUE
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
/SIGNAL_FOLDER=ORIGINAL
/SIGNAL_NAMES=LGRF
/FILE_NAME=::FOLDER&::INDEX&LGRF.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=LON+LON
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/NORMALIZE_DATA=TRUE
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;

End_For_Each
/Iteration_Parameter_Name=INDEX
;
End_For_Each
/Iteration_Parameter_Name=COND
;

Exit_Workspace
;